PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = visual search
  Screen = 1
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Routines
  Routine instruction
    TextComponent intr_1
      pos = (0, 0.1)
      text = Press 'up' if target is the same as original
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent instr_2
      text = Press 'left' if target rotates to the left compared to the original
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent instr_3
      pos = (0, -0.1)
      text = Press 'right' if target rotates to the right compared to the original
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent proceed
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine experiment
    TextComponent Fixation
      stopVal [duration (s)] = 1.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    GratingComponent target
      tex = sin
      stopVal [duration (s)] = 1.0
      mask = circle
      pos = (0.5, 0)
      ori [set every repeat] = gabor
      startVal [time (s)] = 0.0
      sf = [4,5]
      size = (0.5, 0.5)
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    GratingComponent original
      tex = sin
      stopVal [duration (s)] = 1.0
      mask = circle
      pos = (-0.5, 0)
      ori [set every repeat] = conditions
      startVal [time (s)] = 0.0
      sf = [4,5]
      size = (0.5, 0.5)
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    TextComponent instruction_1
      pos = (0, 0.1)
      text = Press 'up' if target is the same as original
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','up'
      startVal [time (s)] = 1
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    TextComponent instruction_2
      startVal [time (s)] = 1
      letterHeight = 0.1
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      text:
        Press 'left' if target rotates to the left compared to the original
    TextComponent instruction_3
      pos = (0, -0.1)
      text = Press 'right' if target rotates to the right compared to the original
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent label_original
      stopVal [duration (s)] = 1.0
      pos = (-0.5, 0.4)
      text = Original
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent label_target
      stopVal [duration (s)] = 1.0
      pos = (0.5, 0.4)
      text = Target
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      text = $trials
      pos = (-0.7, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment matrix.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'gabor': -6.0, 'trials': u'1 of 800', 'deviationAway': -6.0, 'corrAns': u'left', 'conditions': 0, 'match': 0.0},
      {'gabor': 37.0, 'trials': u'2 of 800', 'deviationAway': -8.0, 'corrAns': u'left', 'conditions': 45, 'match': 0.0},
      {'gabor': 135.0, 'trials': u'3 of 800', 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 135, 'match': 1.0},
      {'gabor': 137.0, 'trials': u'4 of 800', 'deviationAway': 2.0, 'corrAns': u'right', 'conditions': 135, 'match': 0.0},
      {'gabor': 39.0, 'trials': u'5 of 800', 'deviationAway': -6.0, 'corrAns': u'left', 'conditions': 45, 'match': 0.0},
      {'gabor': 145.0, 'trials': u'6 of 800', 'deviationAway': 10.0, 'corrAns': u'right', 'conditions': 135, 'match': 0.0},
      {'gabor': 84.0, 'trials': u'7 of 800', 'deviationAway': -6.0, 'corrAns': u'left', 'conditions': 90, 'match': 0.0},
      {'gabor': 35.0, 'trials': u'8 of 800', 'deviationAway': -10.0, 'corrAns': u'left', 'conditions': 45, 'match': 0.0},
      {'gabor': 0.0, 'trials': u'9 of 800', 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 0, 'match': 1.0},
      {'gabor': 8.0, 'trials': u'10 of 800', 'deviationAway': 8.0, 'corrAns': u'right', 'conditions': 0, 'match': 0.0},
      {'gabor': 90.0, 'trials': u'11 of 800', 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 90, 'match': 1.0},
      {'gabor': 94.0, 'trials': u'12 of 800', 'deviationAway': 4.0, 'corrAns': u'right', 'conditions': 90, 'match': 0.0},
      {'gabor': 2.0, 'trials': u'13 of 800', 'deviationAway': 2.0, 'corrAns': u'right', 'conditions': 0, 'match': 0.0}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
    Routine experiment
  LoopTerminator trials
