PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = test
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Routine:
        fixDuration = np.random.uniform(0.5,1.5)
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      color [set every repeat] = $color
      text [set every repeat] = $word
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
      store = first key
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    StaticComponent ISI
      stopVal [duration (s)] = $fixDuration
      startVal [time (s)] = 0.0
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'color': u'red', 'congruent': 1, 'word': u'red', 'corrAns': u'left'},
      {'color': u'green', 'congruent': 0, 'word': u'red', 'corrAns': u'right'},
      {'color': u'green', 'congruent': 1, 'word': u'green', 'corrAns': u'left'},
      {'color': u'blue', 'congruent': 0, 'word': u'green', 'corrAns': u'right'},
      {'color': u'blue', 'congruent': 1, 'word': u'blue', 'corrAns': u'left'},
      {'color': u'red', 'congruent': 0, 'word': u'blue', 'corrAns': u'right'}]
    Routine trial
  LoopTerminator trials
