PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = visual search
  Screen = 1
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Routines
  Routine instruction
    TextComponent intr_1
      text = Press 'up' if target is the same as original
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent instr_2
      text = Press 'left' if target rotates to the left compared to the original
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent instr_3
      text = Press 'right' if target rotates to the right compared to the original
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent proceed
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine experiment
    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    GratingComponent target
      tex = sin
      stopVal [duration (s)] = 1.0
      mask = circle
      pos = (0.5, 0)
      ori [set every repeat] = gabor
      startVal [time (s)] = 0.0
      sf = [4,5]
      size = (0.5, 0.5)
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    GratingComponent original
      tex = sin
      stopVal [duration (s)] = 1.0
      mask = circle
      pos = (-0.5, 0)
      ori [set every repeat] = conditions
      startVal [time (s)] = 0.0
      sf = [4,5]
      size = (0.5, 0.5)
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    TextComponent instruction_1
      text = Press 'up' if target is the same as original
      pos = (0, 0.1)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','up'
      startVal [time (s)] = 1
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    TextComponent instruction_2
      startVal [time (s)] = 1
      letterHeight = 0.1
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      text:
        Press 'left' if target rotates to the left compared to the original
    TextComponent instruction_3
      text = Press 'right' if target rotates to the right compared to the original
      pos = (0, -0.1)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent label_original
      text = Original
      stopVal [duration (s)] = 1.0
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent label_target
      text = Target
      stopVal [duration (s)] = 1.0
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      text [set every repeat] = $trials
      pos = (-0.7, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment matrix.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'gabor': 90.0, 'trials': 1, 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 90, 'match': 1.0},
      {'gabor': 98.0, 'trials': 2, 'deviationAway': 8.0, 'corrAns': u'right', 'conditions': 90, 'match': 0.0},
      {'gabor': 80.0, 'trials': 3, 'deviationAway': -10.0, 'corrAns': u'left', 'conditions': 90, 'match': 0.0},
      {'gabor': 45.0, 'trials': 4, 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 45, 'match': 1.0},
      {'gabor': 135.0, 'trials': 5, 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 135, 'match': 1.0},
      {'gabor': 51.0, 'trials': 6, 'deviationAway': 6.0, 'corrAns': u'right', 'conditions': 45, 'match': 0.0},
      {'gabor': 49.0, 'trials': 7, 'deviationAway': 4.0, 'corrAns': u'right', 'conditions': 45, 'match': 0.0},
      {'gabor': 90.0, 'trials': 8, 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 90, 'match': 1.0},
      {'gabor': 82.0, 'trials': 9, 'deviationAway': -8.0, 'corrAns': u'left', 'conditions': 90, 'match': 0.0},
      {'gabor': 0.0, 'trials': 10, 'deviationAway': 0.0, 'corrAns': u'up', 'conditions': 0, 'match': 1.0},
      {'gabor': 139.0, 'trials': 11, 'deviationAway': 4.0, 'corrAns': u'right', 'conditions': 135, 'match': 0.0},
      {'gabor': -8.0, 'trials': 12, 'deviationAway': -8.0, 'corrAns': u'left', 'conditions': 0, 'match': 0.0},
      {'gabor': -2.0, 'trials': 13, 'deviationAway': -2.0, 'corrAns': u'left', 'conditions': 0, 'match': 0.0},
      {'gabor': 41.0, 'trials': 14, 'deviationAway': -4.0, 'corrAns': u'left', 'conditions': 45, 'match': 0.0}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
    Routine experiment
  LoopTerminator trials
