PsychoPy2experiment version="3.2.4"
Settings
  Data filename = u'../results/%s/%s_%s' % (expInfo['participant'], expInfo['language'], expInfo['date'])
  Experiment info = {'participant': 'test', 'session': '001', 'language': 'mixed'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1.000,-1.000,-1.000]
  expName = visual_search
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Routines
  Routine trial
    ImageComponent targets
      image [set every repeat] = $image_path
      size = (1024, 1024)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent just_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine look_at_me
    TextComponent fixation
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent press_to_go
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\data\Spanish.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 0), ('set_size', 12), ('target_word', ['usuario']), ('distract_words', 'amets,zatiki,iragarpen,hartzaile,behor,garagardo,bezero,eskularru,igarle,usaimen,sendatze,aditu'), ('image_path', '../figures/Spanish_0.jpeg')]),
      OrderedDict([('trial', 1), ('set_size', 24), ('target_word', ['inventor']), ('distract_words', 'eramaile,burrunba,baliabide,suge,izaki,errauts,lehendakari,garai,jatetxe,aitorle,maskor,asmaketa,haritz,hodei,erromes,errolda,lekuko,gonbidatu,apezpiku,amets,itzal,usain,etsai,lursail'), ('image_path', '../figures/Spanish_1.jpeg')]),
      OrderedDict([('trial', 2), ('set_size', 24), ('target_word', ['época']), ('distract_words', 'suge,lursail,garaile,orrialde,ariketa,ezkor,txerri,igorle,ostatu,saltzaile,margolari,xake,garagardo,apezpiku,lasterkari,arau,jokalari,mutil,sinadura,haritz,asmaketa,egile,lehendakari,hautagai'), ('image_path', '../figures/Spanish_2.jpeg')]),
      OrderedDict([('trial', 3), ('set_size', 8), ('target_word', ['abuelo']), ('distract_words', 'gidari,zerrenda,zaldizko,sukaldari,batzorde,olerkari,usaimen,ordezkari'), ('image_path', '../figures/Spanish_3.jpeg')]),
      OrderedDict([('trial', 4), ('set_size', 20), ('target_word', ['ejercicio']), ('distract_words', 'batzar,lasterkari,eskularru,edukitze,errepide,zaindari,lapurreta,ariketa,aita,mandatu,lehorte,hautagai,negu,jatetxe,iruzur,orrialde,ordezkari,idazle,sinadura,lantegi'), ('image_path', '../figures/Spanish_4.jpeg')])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
    Routine look_at_me
    Routine trial
  LoopTerminator trials
